PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['School'], expName,  expInfo['date'])
  Experiment info = {'participant': '', 'School': '', 'Number of Rules': '[2,3]', 'Audio': "['Yes', 'No']", 'Debug': "['No', 'Yes']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/seqs/crayons-2yo.csv', 'resources/imgs/slides/slide-03.png', 'resources/imgs/slides/slide-04.png', 'resources/imgs/slides/slide-06.png', 'resources/imgs/slides/slide-07.png', 'resources/imgs/slides/slide-09.png', 'resources/imgs/slides/slide-10.png', 'resources/imgs/crayons/boxlongoutline_whbg.png', 'resources/imgs/crayons/boxlongred_whbg.png', 'resources/imgs/crayons/boxshortoutline_whbg.png', 'resources/imgs/crayons/boxshortred_whbg.png', 'resources/imgs/crayons/longred_whbg_transp.png', 'resources/imgs/crayons/longyellow_whbg_transp.png', 'resources/imgs/crayons/shortred_whbg_transp.png', 'resources/imgs/crayons/shortyellow_whbg_transp.png', 'resources/imgs/continue.png', 'resources/aud/rule-1-practice.m4a', 'resources/aud/rule-1-teaching.m4a', 'resources/aud/rule-2-practice.m4a', 'resources/aud/rule-2-teaching.m4a', 'resources/aud/rule-3-practice.m4a', 'resources/aud/rule-3-teaching-part-1.m4a', 'resources/aud/rule-3-teaching-part-2.m4a', 'resources/aud/rule-3-teaching-part-3.m4a', 'resources/aud/task-introduction.m4a', 'resources/aud/trials-go.m4a', 'resources/aud/trials-practice-again.m4a']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = #D8E6E4
  expName = crayons
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        score = 0
        scores = []
        cumulative_time = 0.0
      Begin Routine:
        if skip_practice:
            continueRoutine = False

        if trialNum == 1:
            if ruleNum != 3:
                box1 = OBJS["long-red-crayon-box"]
                box2 = OBJS["short-red-crayon-box"]
            else:
                box1 = OBJS["long-outline-crayon-box"]
                box2 = OBJS["short-outline-crayon-box"]

        box1.autoDraw = True
        box2.autoDraw = True

        CARD = OBJS[stimulus]
        CARD.pos = CARD_POS0
        CARD.autoDraw = True

        dormant_card = CARD

        #if practice_passed \
        #or terminate_experiment \
        #or (not SHOW_DEMO and is_demo):
        #    continueRoutine = False

        #hide(GLOBAL_CONT)

        #dormant_card = make_img(
        #    stimulus,
        #    stimulus_file,
        #    NEW_CARD_POS
        #)
        active_card = None
        moving_card = None
        drag_in_process = False
        DRAGGING = False

        feedback_delay_start = None
        picture_delay_start = 0.0

        choice = None
        correct = None
        trial_time = None

        x = 0
        y = 0
        coords_x = []
        coords_y = []
        coords_t = []
      Each Frame:
        # There will always be a delay...
        if feedback_delay_start is not None:
            # Test no removing delay for non-practice
            if is_practice:
                feedback_delay = 0.5  # seconds
                if is_practice and correct == 0:
                    # Longer delay for incorrect answer
                    feedback_delay = 1.0  # seconds
                if t - feedback_delay_start > feedback_delay:
                    continueRoutine = False
            else:
                # No delay for non-practice
                continueRoutine = False
        elif active_card is None and t > 0.05:
            active_card = dormant_card
        elif not drag_in_process and t > 0.1:
            MOUSE_L = MOUSE.getPressed()[0]
            if MOUSE_L_prev != MOUSE_L:
                MOUSE_L_prev = MOUSE_L
                if MOUSE_L == 1:
                    if MOUSE.isPressedIn(active_card):
                        moving_card = active_card
                        drag_in_process = True

        if MOUSE.getPressed()[0] == 1:
            if drag_in_process:
                moving_card.pos = MOUSE.getPos()
                x, y = moving_card.pos
                if len(coords_x) == 0 or dist_sq(coords_x[-1], coords_y[-1], x, y) > MIN_DIST_SQ:
                    coords_x.append(round_dp(x))
                    coords_y.append(round_dp(y))
                    coords_t.append(round_dp(t))
        else:
            drag_in_process = False
            if moving_card is not None:
                # Made a choice
                if snapped(moving_card, box1):
                    choice = box1.name
                    moving_card.autoDraw = False
                    moving_card.pos = CARD_POS0
                elif snapped(moving_card, box2):
                    choice = box2.name
                    moving_card.autoDraw = False
                    moving_card.pos = CARD_POS0
                # Evaluate choice
                if choice is not None:
                    trial_time = t
                    cumulative_time += t
                    feedback_delay_start = t
                    if choice == corrAns:
                        correct = 1
                        if is_practice:
                            trial_feedback.text = "✅ Correct!"
                        score += 1
                    else:
                        correct = 0
                        if is_practice:
                            trial_feedback.text = "❌ Let's think again"
                moving_card = None

        if SHOW_DEBUG:
            trial_text.text = f"""
        tryNum = {tryNum}
        trialNum = {trialNum} (out of {maxScore})
        score = {score} (out of {maxScore})
        globalClock = {round(globalClock.getTime(), 3)}
        t = {round(t, 3)}
        """
            if moving_card is not None:
                trial_text.text += f"""
        moving_card.name = {moving_card.name}
        pos = ({round(x, 3)}, {round(y, 3)})
        """
      End Routine:
        box1.autoDraw = False
        box2.autoDraw = False

        if trialNum == maxScore:
            scores.append(score)
            score = 0  # Reset

        trial_feedback.text = ""

        thisExp.addData("choice", choice)
        thisExp.addData("correct", correct)
        thisExp.addData("trial_time", trial_time)
        thisExp.addData("cumulative_time", cumulative_time)

        # Position tracking (for Nixi)
        thisExp.addData("coords_x", coords_x)
        thisExp.addData("coords_y", coords_y)
        thisExp.addData("coords_t", coords_t)

        # Record timestamp and total time
        thisExp.addData("end_timestamp", util.MonotonicClock.getDateStr())
        thisExp.addData("total_seconds", globalClock.getTime())
    TextComponent trial_header
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockName
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    TextComponent trial_feedback
      color = black
      letterHeight = 0.1
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent trial_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine gate
    CodeComponent gate_code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("expVersion", expVersion)

        is_practice = tryNum != "NA"
        is_first_practice = tryNum == 1

        skip_practice = False
        if is_practice and not is_first_practice and scores[-1] >= 4:
            skip_practice = True

        if int(trialNum) != 1 or not is_first_practice or skip_practice:
            continueRoutine = False

        if USE_AUDIO:
            if ruleNum != 3:
                aud_files = [f"{AUD_DIR}/rule-{ruleNum}-teaching.m4a"]
            else:
                aud_files = []
                for i in range(1, 4):
                    aud_files.append(f"{AUD_DIR}/rule-3-teaching-part-{i}.m4a")
            aud_idx = 0
            SOUND = make_sound("teaching", aud_files[aud_idx])
            SOUND_DUR = SOUND.getDuration()
            SOUND_T = 0
            SOUND.play()

        gate_header.text = HEADERS[ruleNum]

        boxes, objs, times, xy0s, dxdys = all_anims[ruleNum]()

        for box in boxes:
            box.autoDraw = True

        hide_next = True

        hide_objs = []
        for i in range(len(objs)):
            hide_objs.append(True)

        if SHOW_DEBUG:
            SKIP.autoDraw = True
      Each Frame:
        if ruleNum == 3:
            if t - SOUND_T > SOUND_DUR:
                if aud_idx < 2:
                    aud_idx += 1
                    SOUND = make_sound("teaching", aud_files[aud_idx])
                    SOUND_DUR = SOUND.getDuration()
                    SOUND_T = t
                    SOUND.play()
                else:
                    hide_next = False
                    NEXT.autoDraw = True
        else:
            if hide_next and t - SOUND_T > SOUND_DUR:
                hide_next = False
                NEXT.autoDraw = True

        for i in range(len(objs)):
            if hide_objs[i] and t > times[i][0] and t <= times[i][2]:
                hide_objs[i] = False
                objs[i].pos = xy0s[i]
                objs[i].autoDraw = True
            if not hide_objs[i] and t > times[i][2]:
                hide_objs[i] = True
                objs[i].autoDraw = False
            if t > times[i][1] and t <= times[i][2]:
                objs[i].pos = get_xy(t, times[i][1], xy0s[i], dxdys[i])

        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L:
                if t - SOUND_T > SOUND_DUR and NEXT.contains(MOUSE):
                    if ruleNum != 3:
                        continueRoutine = False
                    elif aud_idx >= 2:
                        continueRoutine = False
                elif SHOW_DEBUG and SKIP.contains(MOUSE):
                    continueRoutine = False

        if SHOW_DEBUG:
            gate_text.text = f"""
        aud_files[{aud_idx}] = {aud_files[aud_idx]}
        SOUND_DUR = {round(SOUND_DUR, 3)}
        t = {round(t, 3)}
        """
      End Routine:
        gate_header.text = ""

        for box in boxes:
            box.autoDraw = False

        for i in range(len(objs)):
            objs[i].pos = CARD_POS0
            objs[i].autoDraw = False

        NEXT.autoDraw = False

        if USE_AUDIO:
            SOUND.stop()

        if SHOW_DEBUG:
            SKIP.autoDraw = False
    CodeComponent gate_anim
      Code Type = Auto->JS
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      Before Experiment:
        def anim_r1():
            boxes = [OBJS["long-red-crayon-box"],
                     OBJS["short-red-crayon-box"]]
            objs = [OBJS["long-red-crayon"],
                    OBJS["short-red-crayon"]]
            dests = [boxes[0], boxes[1]]
            times = [[0, 10.5, 12.5], [15.4, 17.5, 20.5]]
            xy0s = []
            xy1s = []
            dxdys = []
            for i in range(len(objs)):
                xy0s.append(objs[i].pos)
                xy1s.append(dests[i].pos)
                dxdys.append(get_dxdy(xy0s[i], xy1s[i], times[i][1], times[i][2]))
            return boxes, objs, times, xy0s, dxdys

        def anim_r2():
            boxes = [OBJS["long-red-crayon-box"],
                     OBJS["short-red-crayon-box"]]
            objs = [OBJS["long-red-crayon"],
                    OBJS["short-red-crayon"]]
            dests = [boxes[1], boxes[0]]
            times = [[5, 7, 10], [12.5, 14.5, 17.5]]
            xy0s = []
            xy1s = []
            dxdys = []
            for i in range(len(objs)):
                xy0s.append(objs[i].pos)
                xy1s.append(dests[i].pos)
                dxdys.append(get_dxdy(xy0s[i], xy1s[i], times[i][1], times[i][2]))
            return boxes, objs, times, xy0s, dxdys

        def anim_r3():
            boxes = [OBJS["long-outline-crayon-box"],
                     OBJS["short-outline-crayon-box"]]
            objs = [OBJS["long-red-crayon"],
                    OBJS["short-red-crayon"],
                    OBJS["long-yellow-crayon"],
                    OBJS["short-yellow-crayon"],
                    OBJS["long-red-crayon"],
                    OBJS["short-red-crayon"],
                    OBJS["long-yellow-crayon"],
                    OBJS["short-yellow-crayon"]]
            xy0s = [(-0.25, -0.25),
                    (0.25, -0.25),
                    (-0.25, -0.25),
                    (0.25, -0.25),
                    CARD_POS0, CARD_POS0, CARD_POS0, CARD_POS0]
            xy1s = [xy0s[0],
                    xy0s[1],
                    xy0s[2],
                    xy0s[3],
                    boxes[0].pos,
                    boxes[1].pos,
                    boxes[1].pos,
                    boxes[0].pos]
            times = [[5.5, 11, 11],
                     [5.5, 11, 11],
                     [12, 18, 18],
                     [12, 18, 18],
                     [21, 24, 26],
                     [29, 31, 33.5],
                     [37, 39, 42],
                     [45, 47, 50]]
            dxdys = []
            for i in range(len(objs)):
                dxdys.append(get_dxdy(xy0s[i], xy1s[i], times[i][1], times[i][2]))
            return boxes, objs, times, xy0s, dxdys

        def get_dxdy(xy0, xy1, t0, t1):
            x0, y0 = xy0
            x1, y1 = xy1
            dt = t1 - t0
            dx = (x1 - x0) / dt
            dy = (y1 - y0) / dt
            return dx, dy

        def get_xy(t, t0, xy0, dxdy):
            x0, y0 = xy0
            dx, dy = dxdy
            dt = t - t0
            x = x0 + dx * dt
            y = y0 + dy * dt
            return x, y
      Begin Experiment:
        all_anims = [None]
        all_anims.append(anim_r1)
        all_anims.append(anim_r2)
        all_anims.append(anim_r3)
    TextComponent gate_header
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent gate_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine begin
    CodeComponent begin_code
      Code Type = Auto->JS
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      Begin Experiment:
        expVersion = "2022.09.25"
        AUD_DIR = "resources/aud"
        IMGS_DIR = "resources/imgs"
        OBJS_DIR = f"{IMGS_DIR}/crayons"
        SLIDES_DIR = f"{IMGS_DIR}/slides"
        SEQ_FILE = "resources/seqs/crayons-2yo.csv"

        SHOW_DEBUG = expInfo["Debug"] == "Yes"
        USE_AUDIO = expInfo["Audio"] == "Yes"
        SELECTED_RULE = int(expInfo["Number of Rules"])

        row_end_index = 44
        if SELECTED_RULE == 3:
            row_end_index = 66
        selected_rows = f"0:{row_end_index}"

        # So the cards do not immediately move (100 ms)
        PICTURE_DELAY = 0.1

        # Mouse tracking threshold squared distance
        MIN_DIST_SQ = 0.005 * 0.005

        # Slides: 1001 x 563
        SLIDE_W = 1.0
        SLIDE_SIZE = (SLIDE_W, SLIDE_W / 1001 * 563)

        # Objects: 600 x 360
        BOX_W = 0.6
        BOX_SIZE = (BOX_W, BOX_W / 600 * 360)
        CARD_W = 0.45
        CARD_SIZE = (CARD_W, CARD_W / 600 * 360)

        BOX1_POS = (-0.4, 0.15)
        BOX2_POS = (0.4, 0.15)
        CARD_POS0 = (0, -0.3)

        # "Next" button
        NEXT_POS = (0, -0.39)
        #NEXT_SIZE = (0.26, 0.1)
        #NEXT = make_button("continue", "Continue", NEXT_POS, NEXT_SIZE)
        NEXT_SIZE = (0.1 / 104 * 254, 0.1)  # 254 x 104
        NEXT = make_img("continue", f"{IMGS_DIR}/continue.png", NEXT_POS, NEXT_SIZE)

        SKIP = make_button("skip", "Skip", (0.6, -0.3), (0.21, 0.1))

        # Global mouse
        MOUSE = core.Mouse(win=win)
        MOUSE_L = 0
        MOUSE_L_prev = 0

        # Global sound
        SOUND = None

        OBJS = {}
        OBJS["long-red-crayon-box"] = make_img("long-red-crayon-box", f"{OBJS_DIR}/boxlongred_whbg.png", BOX1_POS, BOX_SIZE)
        OBJS["short-red-crayon-box"] = make_img("short-red-crayon-box", f"{OBJS_DIR}/boxshortred_whbg.png", BOX2_POS, BOX_SIZE)
        OBJS["long-outline-crayon-box"] = make_img("long-outline-crayon-box", f"{OBJS_DIR}/boxlongoutline_whbg.png", BOX1_POS, BOX_SIZE)
        OBJS["short-outline-crayon-box"] = make_img("short-outline-crayon-box", f"{OBJS_DIR}/boxshortoutline_whbg.png", BOX2_POS, BOX_SIZE)
        OBJS["long-red-crayon"] = make_img("long-red-crayon", f"{OBJS_DIR}/longred_whbg_transp.png", CARD_POS0, CARD_SIZE)
        OBJS["short-red-crayon"] = make_img("short-red-crayon", f"{OBJS_DIR}/shortred_whbg_transp.png", CARD_POS0, CARD_SIZE)
        OBJS["long-yellow-crayon"] = make_img("long-yellow-crayon", f"{OBJS_DIR}/longyellow_whbg_transp.png", CARD_POS0, CARD_SIZE)
        OBJS["short-yellow-crayon"] = make_img("short-yellow-crayon", f"{OBJS_DIR}/shortyellow_whbg_transp.png", CARD_POS0, CARD_SIZE)

        HEADERS = [
            None,
            "Rule 1 Teaching",
            "Rule 2 Teaching",
            "Rule 3 Teaching",
        ]
      Begin Routine:
        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/task-introduction.m4a"
            SOUND = make_sound("intro", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND_T = 0
            SOUND.play()

        OBJS["long-red-crayon"].pos = (0, 0)
        OBJS["long-red-crayon"].autoDraw = True

        if SHOW_DEBUG:
            SKIP.autoDraw = True
      Each Frame:
        if t > SOUND_DUR:
            continueRoutine = False
        elif t > 8.8:
            OBJS["long-red-crayon"].autoDraw = False
            OBJS["short-red-crayon"].pos = (0, 0)
            OBJS["short-red-crayon"].autoDraw = True

        if SHOW_DEBUG:
            begin_text.text = f"""
        row_end_index = {row_end_index}
        aud_file = {aud_file}
        SOUND_DUR = {round(SOUND_DUR, 3)}
        t = {round(t, 3)}
        """
            MOUSE_L = MOUSE.getPressed()[0]
            if MOUSE_L_prev != MOUSE_L:
                MOUSE_L_prev = MOUSE_L
                if MOUSE_L and SKIP.contains(MOUSE):
                    continueRoutine = False
      End Routine:
        OBJS["long-red-crayon"].autoDraw = False
        OBJS["long-red-crayon"].pos = CARD_POS0
        OBJS["short-red-crayon"].autoDraw = False
        OBJS["short-red-crayon"].pos = CARD_POS0

        if USE_AUDIO:
            SOUND.stop()

        if SHOW_DEBUG:
            SKIP.autoDraw = False
    CodeComponent functions_g
      Code Type = Auto->JS
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      Before Experiment:
        def make_button(name, text, pos, size):
            return visual.ButtonStim(
                win=win,
                text=text,
            #    font="Arvo",
                pos=pos,
                letterHeight=0.05,
                size=size,
                borderWidth=0.005,
                fillColor="lightgrey",
                borderColor="darkgrey",
                color="black",
                colorSpace="rgb",
                opacity=None,
                bold=True,
                italic=False,
                padding=None,
                anchor="center",
                name=name
            )

        def make_sound(name, filepath):
            return sound.Sound(
                win=win,
                value=filepath,
                secs=-1,
                stereo=True,
                hamming=True,
                name=name
            )

        def make_img(name, file_name, pos, size, opacity):
            return visual.ImageStim(
                win=win,
                name=name,
                image=file_name,
                pos=pos,
                size=size,
                opacity=opacity
            )

        def make_slide(name, pos=(0, 0), size=SLIDE_SIZE):
            return make_img(
                name,
                f"{SLIDES_DIR}/{name}.png",
                pos, size, 1
            )

        # ---

        def within_box(obj, box):
            """
            Determine if object is within box
            - Squared difference in x (and y) coordinates
            should be less than the square of half the
            box width (and height)
            - That would mean the center of the object is
            within the box boundaries
            """
            obj_x, obj_y = obj.pos
            box_x, box_y = box.pos
            box_w, box_h = box.size
            dx, dy = obj_x - box_x, obj_y - box_y
            hw, hh = box_w / 2, box_h / 2
            return dx * dx < hw * hw and dy * dy < hh * hh

        def snapped(obj1, obj2, func=within_box):
            """
            Determine if obj1 snapped to center of obj2
            - Check if obj1 is 'near' obj2, based on func
            - If yes, set the obj1's position to be
            equal to obj2's position and return True
            - Otherwise, do nothing and return False
            """
            if func(obj1, obj2):
                obj1.pos = obj2.pos
                return True
            return False

        def dist_sq(x1, y1, x2, y2):
            dx, dy = x2 - x1, y2 - y1
            return (dx * dx) + (dy * dy)

        def round_dp(x, dp=5):
            num, = (10 ** dp),
            return round(x * num) / num
    TextComponent begin_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine slide
    CodeComponent slide_code
      Code Type = Auto->JS
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      Begin Routine:
        # Rule 1 practice: can cut around 12 seconds
        # Rule 1 test: can cut around 11 seconds
        # ...
        # Forget it, just stick to end of audio clip...

        if slideNum != "NA" and not skip_practice:
            slide = make_slide(slideNum)
            slide.autoDraw = True
            if USE_AUDIO:
                if tryNum == 1:
                    aud_file = f"{AUD_DIR}/rule-{ruleNum}-practice.m4a"
                elif tryNum == "NA":
                    aud_file = f"{AUD_DIR}/trials-go.m4a"
                else:
                    aud_file = f"{AUD_DIR}/trials-practice-again.m4a"
                SOUND = make_sound("practice", aud_file)
                SOUND_DUR = SOUND.getDuration()
                SOUND_T = 0
                SOUND.play()
        else:
            continueRoutine = False

        if SHOW_DEBUG:
            SKIP.autoDraw = True
      Each Frame:
        if slideNum != "NA" and not skip_practice and t > SOUND_DUR:
            continueRoutine = False

        if SHOW_DEBUG:
            slide_text.text = f"""
        aud_file = {aud_file}
        SOUND_DUR = {round(SOUND_DUR, 3)}
        t = {round(t, 3)}
        """
            MOUSE_L = MOUSE.getPressed()[0]
            if MOUSE_L_prev != MOUSE_L:
                MOUSE_L_prev = MOUSE_L
                if MOUSE_L and SKIP.contains(MOUSE):
                    continueRoutine = False
      End Routine:
        if slideNum != "NA" and not skip_practice:
            slide.autoDraw = False
            if USE_AUDIO:
                SOUND.stop()

        if SHOW_DEBUG:
            SKIP.autoDraw = False
    TextComponent slide_text
      color = black
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = $SEQ_FILE
    loopType = sequential
    nReps = 1
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    Routine gate
    Routine slide
    Routine trial
  LoopTerminator trials
